PsychoPy2experiment version="2024.2.3"
Settings
  Completed URL = $"https://umich.qualtrics.com/jfe/form/SV_0q5qeF556IwNuZM?PROLIFIC_PID="+expInfo['PROLIFIC_PID']+"&expName="+expName+"&AGE_GROUP="+expInfo['AGE_GROUP']
  Data filename = u'data/%s_%s_%s' % (expInfo['AGE_GROUP'], expInfo['PROLIFIC_PID'], expName, expInfo['date'])
  Experiment info = {'PROLIFIC_PID': '', 'AGE_GROUP': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.1.5
  Window size (pixels) = [1920, 1080]
  color = black
  expName = forced-response-flanker
  exportHTML = manually
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    ImageComponent instruct_image
      image = instructions/exp_ins.png
      saveStartStop = False
      size = (1.33,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruct_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
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    TextComponent feedback_text
      color [set every repeat] = lightgray
      letterHeight = 0.05
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [time (s)] = .4
      text [set every repeat] = $feedback_msg
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  Routine feedback_timing
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    TextComponent feedback_text_timing
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = .4
      text [set every repeat] = $feedback_msg
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  Routine instructions_timing
    RoutineSettingsComponent instructions_timing
      saveStartStop = False
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    ImageComponent instruct_timing_image
      image = instructions/timing_ins.png
      saveStartStop = False
      size = (1.33,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruct_resp_timing
      allowedKeys = ['space','6']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent timing_code
      Code Type = Auto->JS
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      End Routine:
        nReps_timing_demo = 99 # for repeats of demos
        if instruct_resp_timing.keys == '6':
            nReps_timing = 0
            nReps_timing_demo = 0
  Routine feedback_test
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    TextComponent feedback_test_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [time (s)] = .4
      text [set every repeat] = $feedback_msg
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    TextComponent wait_text
      letterHeight = 0.1
      startVal [time (s)] = .4
      stopVal [duration (s)] = .6
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  Routine end_block
    RoutineSettingsComponent end_block
      saveStartStop = False
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    CodeComponent rest_code
      Code Type = Auto->JS
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      Begin Experiment:
        block_id = 1
      Begin Routine:
        block_msg = 'You have completed block ' + str(block_id) + ' of ' + str(nBlocks)
        if block_id != nBlocks:
            block_msg = block_msg + '\n\nYour task will be the same in the next block.'
      End Routine:
        block_id = block_id + 1
    TextComponent block_text
      letterHeight = 0.025
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $block_msg
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    TextComponent rest_text
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Feel free to relax for a moment.

        Press the SPACE BAR when you are ready to start.
    KeyboardComponent rest_key
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
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    CodeComponent check_fs
      Code Type = JS
      Begin JS Routine:
        //check full screen (js only)
        fullscreen = psychoJS.window._windowAlreadyInFullScreen
        psychoJS.experiment.addData('fullscreen', fullscreen)

        if ((! fullscreen)) {
            throw new Error('You have exited fullscreen mode. The task will terminate. Please return your submission.');
        }
    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(possible_target_onset_timings)
        target_onset = possible_target_onset_timings[0]/1000
      End Routine:
        rt = forcedRT_resp.rt
        ontime = 'NA'

        if rt < 1.9:
            feedback_msg = "Too fast!"
            ontime = 'Fast'
        elif rt > 2.1:
            feedback_msg = "Too slow!"
            ontime = 'Slow'
        elif rt >= 1.9 and rt <= 2.1:
            feedback_msg = "Perfect timing!"
            ontime = 'Ontime'
        else:
            feedback_msg = "No response."

        pt = (rt - target_onset)*1000
        print('target_onset', target_onset)
        print('pt', pt)

        # log data
        thisExp.addData('block_id', block_id)
        thisExp.addData('ontime', ontime)
        thisExp.addData('target_onset', target_onset)
        thisExp.addData('pt', pt)
    KeyboardComponent forcedRT_resp
      allowedKeys = ['p','w']
      correctAns = $target_resp
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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    PolygonComponent fixation
      fillColor = None
      lineColor = lightgray
      lineWidth = 3
      nVertices = 128
      pos = (0, .07)
      shape = rectangle
      size = (0.35, 0.03)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent dot1
      fillColor = lightgray
      lineColor = lightgray
      lineWidth = 3
      nVertices = 128
      pos = (0, .07)
      shape = rectangle
      size = (0.0875, 0.03)
      startVal [time (s)] = .5
      units = height
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    PolygonComponent dot2
      fillColor = lightgray
      lineColor = lightgray
      lineWidth = 3
      nVertices = 128
      pos = (0, .07)
      shape = rectangle
      size = (0.175, 0.03)
      startVal [time (s)] = 1
      units = height
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    PolygonComponent dot3
      fillColor = lightgray
      lineColor = lightgray
      lineWidth = 3
      nVertices = 128
      pos = (0, .07)
      shape = rectangle
      size = (0.2625, 0.03)
      startVal [time (s)] = 1.5
      units = height
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    PolygonComponent dot4
      fillColor = lightgray
      lineColor = lightgray
      lineWidth = 3
      nVertices = 128
      pos = (0, .07)
      shape = rectangle
      size = (0.35, 0.03)
      startVal [time (s)] = 2
      units = height
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    PolygonComponent fixation_2
      fillColor = None
      lineColor = lightgray
      lineWidth = 3
      nVertices = 128
      pos = (0, -.07)
      shape = rectangle
      size = (0.35, 0.03)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent dot1_2
      fillColor = lightgray
      lineColor = lightgray
      lineWidth = 3
      nVertices = 128
      pos = (0, -.07)
      shape = rectangle
      size = (0.0875, 0.03)
      startVal [time (s)] = .5
      units = height
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    PolygonComponent dot2_2
      fillColor = lightgray
      lineColor = lightgray
      lineWidth = 3
      nVertices = 128
      pos = (0, -.07)
      shape = rectangle
      size = (0.175, 0.03)
      startVal [time (s)] = 1
      units = height
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    PolygonComponent dot3_2
      fillColor = lightgray
      lineColor = lightgray
      lineWidth = 3
      nVertices = 128
      pos = (0, -.07)
      shape = rectangle
      size = (0.2625, 0.03)
      startVal [time (s)] = 1.5
      units = height
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    PolygonComponent dot4_2
      fillColor = lightgray
      lineColor = lightgray
      lineWidth = 3
      nVertices = 128
      pos = (0, -.07)
      shape = rectangle
      size = (0.35, 0.03)
      startVal [time (s)] = 2
      units = height
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    ImageComponent target
      image [set every repeat] = $tar_arrow
      size = size_fl
      startVal [time (s)] = target_onset
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    ImageComponent left1
      image [set every repeat] = $dis_arrow
      pos = [-.07,0]
      size = size_fl
      startVal [time (s)] = target_onset
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    ImageComponent left2
      image [set every repeat] = $dis_arrow
      pos = [-.14,0]
      size = size_fl
      startVal [time (s)] = target_onset
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    ImageComponent right1
      image [set every repeat] = $dis_arrow
      pos = [.07,0]
      size = size_fl
      startVal [time (s)] = target_onset
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    ImageComponent right2
      image [set every repeat] = $dis_arrow
      pos = [.14,0]
      size = size_fl
      startVal [time (s)] = target_onset
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  Routine ITI
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    CodeComponent iti_code
      Code Type = Auto->JS
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      Begin Routine:
        #iti = randint(0,50)/50
        iti = 0
    PolygonComponent iti_ph
      fillColor = None
      lineColor = lightgray
      lineWidth = 3
      nVertices = 128
      pos = (0, .07)
      shape = rectangle
      size = (0.35, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
      units = height
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    PolygonComponent iti_ph_2
      fillColor = None
      lineColor = lightgray
      lineWidth = 3
      nVertices = 128
      pos = (0, -.07)
      shape = rectangle
      size = (0.35, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
      units = height
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  Routine end_study
    RoutineSettingsComponent end_study
      saveStartStop = False
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    TextComponent study_over
      color = lightgray
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        End of Task!

        You will be directed to a survey to answer a few simple questions.

        Press the SPACE BAR to continue. Please wait until you see the THANK YOU box!
    KeyboardComponent exit_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_flanker
    RoutineSettingsComponent instructions_flanker
      saveStartStop = False
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        nReps_free_demo = 99
        if instruct_resp_fl.keys == '6':
            nReps_freeRT = 0
            nReps_free_demo = 0
    ImageComponent free_ins_image
      image = instructions/free_ins.png
      saveStartStop = False
      size = (1.33,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instruct_resp_fl
      allowedKeys = ['space','6']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine free_demo
    RoutineSettingsComponent free_demo
      saveStartStop = False
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    MovieComponent free_demo_movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = instructions/free_demo.mp4
      saveStartStop = False
      size = (1.33,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent free_demo_key
      allowedKeys = 'r','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 10
      store = nothing
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    CodeComponent free_demo_code
      Code Type = Auto->JS
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      End Routine:
        if free_demo_key.keys == 'space':
            free_demo_loop.finished = 1
  Routine get_ready
    RoutineSettingsComponent get_ready
      saveStartStop = False
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    TextComponent ready_text
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Get Ready
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  Routine timing_demo
    RoutineSettingsComponent timing_demo
      saveStartStop = False
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    MovieComponent timing_demo_movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = instructions/timing_demo.mp4
      saveStartStop = False
      size = (1.33,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent timing_demo_key
      allowedKeys = 'r','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 6.5
      store = nothing
      syncScreenRefresh = False
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    CodeComponent timing_demo_code
      Code Type = Auto->JS
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      End Routine:
        if timing_demo_key.keys == 'space':
            timing_demo_loop.finished = 1
  Routine exp_demo
    RoutineSettingsComponent exp_demo
      saveStartStop = False
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    MovieComponent exp_demo_movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = instructions/exp_demo.mp4
      saveStartStop = False
      size = (1.33,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent exp_demo_key
      allowedKeys = 'r','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 6.5
      store = nothing
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    CodeComponent exp_demo_code
      Code Type = Auto->JS
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      End Routine:
        if exp_demo_key.keys == 'space':
            exp_demo_loop.finished = 1
  Routine free
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    CodeComponent check_fs_2
      Code Type = JS
      Begin JS Routine:
        //check full screen (js only)
        fullscreen = psychoJS.window._windowAlreadyInFullScreen
        psychoJS.experiment.addData('fullscreen', fullscreen)

        if ((! fullscreen)) {
            throw new Error('You have exited fullscreen mode. The task will terminate. Please return your submission.');
        }
    CodeComponent trial_code_fl
      Code Type = Auto->JS
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      Begin Experiment:
        acc_free = []
        acc_free_last20 = None
      Begin Routine:
        target_onset = randint(0,50)/50
        thisExp.addData('target_onset', target_onset)
        print('target_onset', target_onset)
      End Routine:
        if trial_resp_fl.corr == 1:
            feedback_msg = "Correct!"
            acc_free.append(1)
        else:
            feedback_msg = "Wrong!"
            acc_free.append(0)

        # accumulative accuracy
        print('len(acc_free)', len(acc_free))
        if len(acc_free) >= 40:
            acc_free_last20 = sum(acc_free[-20:])/len(acc_free[-20:])
            print('acc_free_last20', acc_free_last20)
            if acc_free_last20 >= .85:
                trial_train_free.finished = True
        # terminate task if too many trials
        if len(acc_free) > 80:
            terminate_task = True
    PolygonComponent fixation_fl
      fillColor = None
      lineColor = lightgray
      lineWidth = 3
      nVertices = 128
      pos = (0,.07)
      shape = rectangle
      size = (0.35, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent fixation_fl_2
      fillColor = None
      lineColor = lightgray
      lineWidth = 3
      nVertices = 128
      pos = (0,-.07)
      shape = rectangle
      size = (0.35, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent w_prompt
      color = lightgray
      letterHeight = 0.04
      pos = (-0.4, -0.3)
      startVal [time (s)] = 0.0
      text = W - Left
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    TextComponent p_prompt
      color = lightgray
      letterHeight = 0.04
      pos = (0.4, -0.3)
      startVal [time (s)] = 0.0
      text = P - Right
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    ImageComponent target_fl
      image [set every repeat] = $tar_arrow
      size = size_fl
      startVal [time (s)] = target_onset
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    ImageComponent left1_fl
      image [set every repeat] = $dis_arrow
      pos = [-.07,0]
      size = size_fl
      startVal [time (s)] = target_onset
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    ImageComponent left2_fl
      image [set every repeat] = $dis_arrow
      pos = [-.14, 0]
      size = size_fl
      startVal [time (s)] = target_onset
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    ImageComponent right1_fl
      image [set every repeat] = $dis_arrow
      pos = [.07,0]
      size = size_fl
      startVal [time (s)] = target_onset
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    ImageComponent right2_fl
      image [set every repeat] = $dis_arrow
      pos = [.14,0]
      size = size_fl
      startVal [time (s)] = target_onset
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    KeyboardComponent trial_resp_fl
      allowedKeys = 'w','p'
      correctAns = $target_resp
      forceEndRoutine = True
      startVal [time (s)] = $target_onset
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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  Routine timing
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    CodeComponent check_fs_timing
      Code Type = JS
      Begin JS Routine:
        //check full screen (js only)
        fullscreen = psychoJS.window._windowAlreadyInFullScreen
        psychoJS.experiment.addData('fullscreen', fullscreen)

        if ((! fullscreen)) {
            throw new Error('You have exited fullscreen mode. The task will terminate. Please return your submission.');
        }
    CodeComponent trial_code_timing
      Code Type = Auto->JS
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      Begin Experiment:
        acc_timing = []
        acc_timing_last20 = None
      End Routine:
        rt = trial_resp_timing.rt

        if rt < 1.9:
            feedback_msg = "Too fast!"
            acc_timing.append(0)
        elif rt > 2.1:
            feedback_msg = "Too slow!"
            acc_timing.append(0)
        elif rt >= 1.9 and rt <= 2.1:
            feedback_msg = "Perfect timing!"
            acc_timing.append(1)
        else:
            feedback_msg = "No response."
            acc_timing.append(0)

        # accumulative accuracy
        print('len(acc_timing)', len(acc_timing))
        if len(acc_timing) >= 30:
            acc_timing_last20 = sum(acc_timing[-20:])/len(acc_timing[-20:])
            print('acc_timing_last20',acc_timing_last20)
            if acc_timing_last20 >= .7:
                trial_train_timing.finished = True
        # terminate task if too long
        if len(acc_timing) > 60:
            terminate_task = True
    KeyboardComponent trial_resp_timing
      allowedKeys = 'p','w','esc'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
      syncScreenRefresh = False
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    PolygonComponent fixation_timing
      fillColor = None
      lineColor = lightgray
      lineWidth = 3
      nVertices = 128
      pos = (0, .07)
      shape = rectangle
      size = (0.35, 0.03)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent dot1_timing
      fillColor = lightgray
      lineColor = lightgray
      lineWidth = 0
      nVertices = 128
      pos = (0, .07)
      shape = rectangle
      size = (0.0875, 0.03)
      startVal [time (s)] = .5
      units = height
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    PolygonComponent dot2_timing
      fillColor = lightgray
      lineColor = lightgray
      lineWidth = 0
      nVertices = 128
      pos = (0, .07)
      shape = rectangle
      size = (0.175, 0.03)
      startVal [time (s)] = 1
      units = height
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    PolygonComponent dot3_timing
      fillColor = lightgray
      lineColor = lightgray
      lineWidth = 0
      nVertices = 128
      pos = (0, .07)
      shape = rectangle
      size = (0.2625, 0.03)
      startVal [time (s)] = 1.5
      units = height
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    PolygonComponent dot4_timing
      fillColor = lightgray
      lineColor = lightgray
      lineWidth = 0
      nVertices = 128
      pos = (0, .07)
      shape = rectangle
      size = (0.35, 0.03)
      startVal [time (s)] = 2
      units = height
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    PolygonComponent fixation_timing_2
      lineColor = lightgray
      lineWidth = 3
      nVertices = 128
      pos = (0, -.07)
      shape = rectangle
      size = (0.35, 0.03)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent dot1_timing_2
      fillColor = lightgray
      lineColor = lightgray
      lineWidth = 0
      nVertices = 128
      pos = (0, -.07)
      shape = rectangle
      size = (0.0875, 0.03)
      startVal [time (s)] = .5
      units = height
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    PolygonComponent dot2_timing_2
      fillColor = lightgray
      lineColor = lightgray
      lineWidth = 0
      nVertices = 128
      pos = (0, -.07)
      shape = rectangle
      size = (0.175, 0.03)
      startVal [time (s)] = 1
      units = height
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    PolygonComponent dot3_timing_2
      fillColor = lightgray
      lineColor = lightgray
      lineWidth = 0
      nVertices = 128
      pos = (0, -.07)
      shape = rectangle
      size = (0.2625, 0.03)
      startVal [time (s)] = 1.5
      units = height
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    PolygonComponent dot4_timing_2
      fillColor = lightgray
      lineColor = lightgray
      lineWidth = 0
      nVertices = 128
      pos = (0, -.07)
      shape = rectangle
      size = (0.35, 0.03)
      startVal [time (s)] = 2
      units = height
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  Routine exp_setup
    RoutineSettingsComponent exp_setup
      saveStartStop = False
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    CodeComponent js_funcs
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;

        // some useful functions
        //let asarray=function(something) {
        //  return something;
        //}

        //shuffle = util.shuffle;

        randint = function(min, maxplusone) {
          return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }

        // save IP address
        $.getJSON('https://api.ipify.org?format=json', function(data){
            console.log(data.ip);
            localStorage.setItem('ip',data.ip);
            thisExp.addData('IP_Addresss', data.ip)
            });

        // detect browser
        var sUsrAg;
        var nIdx;
        getBrowserId = function() {
            var browsers = ["MSIE", "Firefox", "Safari", "Chrome", "Opera"];
            sUsrAg = window.navigator.userAgent,
            nIdx = browsers.length - 1;
            for (nIdx; nIdx > -1 && sUsrAg.indexOf(browsers [nIdx]) === -1; nIdx--);

          return browsers[nIdx];
        }

        // record browser
        thisExp.addData('Browser', getBrowserId());

        // hide cursor
        document.body.style.cursor='none';
      End JS Experiment:
        document.body.style.cursor='auto';
    CodeComponent exp_params
      Code Type = Auto->JS
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      Begin Experiment:
        nReps_freeRT = 999 #10
        nReps_timing = 999 #30
        # n of loops per block
        nReps_forcedRT = 13 #13*4 = 52 trials each block
        # n of blocks
        nBlocks = 10 # 10
        # size of flanker image
        size_fl = [0.06, 0.06]
        # possible target onset timings
        min_pt = 0
        max_pt = 1200
        step = 20
        timing_goal = 2000
        possible_target_onset_timings = range((timing_goal-max_pt), (timing_goal-min_pt+step), step)
        print("possible_target_onset_timings", possible_target_onset_timings)
  Routine calibrate_kb
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    CodeComponent calibrate_kb_code
      Code Type = Auto->JS
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      Begin Routine:
        calibrate_ins = 'Press down the W key on your keyboard and Do NOT release it.'
        pressed = False
        keys = []
        t_pressed = None
        last_time_pressed = None
      Each Frame:
        current_keys = event.getKeys()

        # Detect key press
        if not pressed and ('w' in current_keys or 'p' in current_keys):
            pressed = True
            t_pressed = t
            print('pressed at', t_pressed)

        # If key has been pressed, update instruction after 1 second
        if pressed and (t - t_pressed > 1):
            calibrate_ins = 'Now, release the key!'

        # Update last_time_pressed while the key is pressed
        if pressed:
            last_time_pressed = t  # This continuously updates while the key is pressed

        # Detect key release by checking if no keys are pressed this frame
        if pressed and len(current_keys) == 0:
            t_released = t
            t_travel = t_released - last_time_pressed
            print('last pressed at', last_time_pressed)
            print(f"Travel time: {t_travel} seconds")  # Print or log the travel time
            # Reset the pressed state and variables to allow for another measurement
            pressed = False
            t_pressed = None
            last_time_pressed = None
    TextComponent text
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text [set every frame] = $calibrate_ins
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  Routine fpsCheck
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        fps = round(expInfo['frameRate'])
        print(fps)
        fps_cutoff = 59
        if fps >= fps_cutoff:
            continueRoutine=False
            print('fps check passed')
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sorry, but your browser's refresh rate is too low to display the task.

        Please press ESCAPE and return your submission.

        We apologize for any inconvenience.
  Routine fail_task
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        terminate_task = False
      Begin Routine:
        continueRoutine = terminate_task
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sorry, but your task accuracy is too low to complete the task.

        Please press ESCAPE and return your submission.

        You may be entitled to receive partial credit. Please contact the experimenter.

        We apologize for any inconvenience.
Flow
  Routine fpsCheck
  Routine exp_setup
  Routine instructions_flanker
  LoopInitiator free_demo_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = nReps_free_demo
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    Routine free_demo
  LoopTerminator free_demo_loop
  Routine get_ready
  LoopInitiator trial_train_free loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = fullRandom
    nReps = nReps_freeRT
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    conditions:
      [{'trial_type': 'Congruent', 'tar_arrow': 'left.png', 'dis_arrow': 'left.png', 'target_resp': 'w'},
      {'trial_type': 'Congruent', 'tar_arrow': 'right.png', 'dis_arrow': 'right.png', 'target_resp': 'p'},
      {'trial_type': 'Incongruent', 'tar_arrow': 'left.png', 'dis_arrow': 'right.png', 'target_resp': 'w'},
      {'trial_type': 'Incongruent', 'tar_arrow': 'right.png', 'dis_arrow': 'left.png', 'target_resp': 'p'}]
    Routine free
    Routine feedback
    Routine fail_task
  LoopTerminator trial_train_free
  Routine instructions_timing
  LoopInitiator timing_demo_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = nReps_timing_demo
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    Routine timing_demo
  LoopTerminator timing_demo_loop
  Routine get_ready
  LoopInitiator trial_train_timing loopType="TrialHandler"
    loopType = random
    nReps = nReps_timing
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    Routine timing
    Routine feedback_timing
    Routine fail_task
  LoopTerminator trial_train_timing
  Routine instructions
  LoopInitiator exp_demo_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 99
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    Routine exp_demo
  LoopTerminator exp_demo_loop
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = nBlocks
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    Routine get_ready
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = fullRandom
      nReps = nReps_forcedRT
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      conditions:
        [{'trial_type': 'C', 'tar_arrow': 'left.PNG', 'dis_arrow': 'left.PNG', 'target_resp': 'w'},
        {'trial_type': 'C', 'tar_arrow': 'right.PNG', 'dis_arrow': 'right.PNG', 'target_resp': 'p'},
        {'trial_type': 'I', 'tar_arrow': 'left.PNG', 'dis_arrow': 'right.PNG', 'target_resp': 'w'},
        {'trial_type': 'I', 'tar_arrow': 'right.PNG', 'dis_arrow': 'left.PNG', 'target_resp': 'p'}]
      Routine trial
      Routine feedback_test
    LoopTerminator trials
    Routine end_block
  LoopTerminator blocks
  Routine end_study
